---
API: 2.1
OpenSesame: 3.3.4
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Numerische Stoop Task"
set subject_parity even
set subject_nr 0
set start NumerischeStroopTask
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 24
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/juliu/OneDrive/Dokumente/PhD-Thesis/Teaching/Adaptive Control/Experiment"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set background white

define loop Aufgabe_2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run Block_2

define loop Aufgabe_3
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run Block_3

define loop Aufgabe_4a
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run Block_4

define loop Aufgabe_4b
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run Block_4

define loop Aufgaben1
	set source table
	set repeat 0
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run Block1

define sketchpad Blank_Screen
	set duration 500
	set description "Präsentiert Stimuli"

define sequence Block1
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run Block_loop_1 always

define loop BlockLoop_4
	set source table
	set repeat 3
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 56
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 correct_response right
	setcycle 0 number_1 1
	setcycle 0 number_2 2
	setcycle 0 site_1 -300
	setcycle 0 size_1 40
	setcycle 0 item diagnostic
	setcycle 1 correct_response left
	setcycle 1 number_1 1
	setcycle 1 number_2 2
	setcycle 1 site_1 300
	setcycle 1 size_1 40
	setcycle 1 item diagnostic
	setcycle 2 correct_response right
	setcycle 2 number_1 1
	setcycle 2 number_2 2
	setcycle 2 site_1 -300
	setcycle 2 size_1 60
	setcycle 2 item diagnostic
	setcycle 3 correct_response left
	setcycle 3 number_1 1
	setcycle 3 number_2 2
	setcycle 3 site_1 300
	setcycle 3 size_1 60
	setcycle 3 item diagnostic
	setcycle 4 correct_response right
	setcycle 4 number_1 3
	setcycle 4 number_2 4
	setcycle 4 site_1 -300
	setcycle 4 size_1 40
	setcycle 4 item inducer
	setcycle 5 correct_response left
	setcycle 5 number_1 3
	setcycle 5 number_2 4
	setcycle 5 site_1 300
	setcycle 5 size_1 40
	setcycle 5 item inducer
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	setcycle 7 correct_response left
	setcycle 7 number_1 3
	setcycle 7 number_2 4
	setcycle 7 site_1 300
	setcycle 7 size_1 60
	setcycle 7 item inducer
	setcycle 8 correct_response right
	setcycle 8 number_1 6
	setcycle 8 number_2 7
	setcycle 8 site_1 -300
	setcycle 8 size_1 40
	setcycle 8 item diagnostic
	setcycle 9 correct_response left
	setcycle 9 number_1 6
	setcycle 9 number_2 7
	setcycle 9 site_1 300
	setcycle 9 size_1 40
	setcycle 9 item diagnostic
	setcycle 10 correct_response right
	setcycle 10 number_1 6
	setcycle 10 number_2 7
	setcycle 10 site_1 -300
	setcycle 10 size_1 60
	setcycle 10 item diagnostic
	setcycle 11 correct_response left
	setcycle 11 number_1 6
	setcycle 11 number_2 7
	setcycle 11 site_1 300
	setcycle 11 size_1 60
	setcycle 11 item diagnostic
	setcycle 12 correct_response right
	setcycle 12 number_1 8
	setcycle 12 number_2 9
	setcycle 12 site_1 -300
	setcycle 12 size_1 40
	setcycle 12 item inducer
	setcycle 13 correct_response left
	setcycle 13 number_1 8
	setcycle 13 number_2 9
	setcycle 13 site_1 300
	setcycle 13 size_1 40
	setcycle 13 item inducer
	setcycle 14 correct_response right
	setcycle 14 number_1 8
	setcycle 14 number_2 9
	setcycle 14 site_1 -300
	setcycle 14 size_1 60
	setcycle 14 item inducer
	setcycle 15 correct_response left
	setcycle 15 number_1 8
	setcycle 15 number_2 9
	setcycle 15 site_1 300
	setcycle 15 size_1 60
	setcycle 15 item inducer
	setcycle 16 correct_response right
	setcycle 16 number_1 1
	setcycle 16 number_2 3
	setcycle 16 site_1 -300
	setcycle 16 size_1 40
	setcycle 16 item inducer
	setcycle 17 correct_response left
	setcycle 17 number_1 1
	setcycle 17 number_2 3
	setcycle 17 site_1 300
	setcycle 17 size_1 40
	setcycle 17 item inducer
	setcycle 18 correct_response right
	setcycle 18 number_1 1
	setcycle 18 number_2 3
	setcycle 18 site_1 -300
	setcycle 18 size_1 60
	setcycle 18 item inducer
	setcycle 19 correct_response left
	setcycle 19 number_1 1
	setcycle 19 number_2 3
	setcycle 19 site_1 300
	setcycle 19 size_1 60
	setcycle 19 item inducer
	setcycle 20 correct_response right
	setcycle 20 number_1 2
	setcycle 20 number_2 4
	setcycle 20 site_1 -300
	setcycle 20 size_1 40
	setcycle 20 item diagnostic
	setcycle 21 correct_response left
	setcycle 21 number_1 2
	setcycle 21 number_2 4
	setcycle 21 site_1 300
	setcycle 21 size_1 40
	setcycle 21 item diagnostic
	setcycle 22 correct_response right
	setcycle 22 number_1 2
	setcycle 22 number_2 4
	setcycle 22 site_1 -300
	setcycle 22 size_1 60
	setcycle 22 item diagnostic
	setcycle 23 correct_response left
	setcycle 23 number_1 2
	setcycle 23 number_2 4
	setcycle 23 site_1 300
	setcycle 23 size_1 60
	setcycle 23 item diagnostic
	setcycle 24 correct_response right
	setcycle 24 number_1 6
	setcycle 24 number_2 8
	setcycle 24 site_1 -300
	setcycle 24 size_1 40
	setcycle 24 item inducer
	setcycle 25 correct_response left
	setcycle 25 number_1 6
	setcycle 25 number_2 8
	setcycle 25 site_1 300
	setcycle 25 size_1 40
	setcycle 25 item inducer
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	setcycle 28 correct_response right
	setcycle 28 number_1 7
	setcycle 28 number_2 9
	setcycle 28 site_1 -300
	setcycle 28 size_1 40
	setcycle 28 item diagnostic
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	run Experiment

define sequence Block_2
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run start_recording 0
	run Blook_Loop_2 always
	run pause_recording 0
	run Pause always
	run start_recording 0
	run Blook_Loop_2 always
	run pause_recording 0

define sequence Block_3
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run start_recording always
	run Bloock_Loop_3 always
	run pause_recording always
	run Pause always
	run start_recording always
	run Bloock_Loop_3 always
	run pause_recording always

define sequence Block_4
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run start_recording always
	run BlockLoop_4 always
	run pause_recording always
	run start_recording always
	run Pause always
	run pause_recording always
	run BlockLoop_4 always

define loop Block_loop_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 32
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 correct_response right
	setcycle 0 number_1 1
	setcycle 0 number_2 2
	setcycle 0 site_1 -300
	setcycle 0 size_1 40
	setcycle 0 item diagnostic
	setcycle 1 correct_response left
	setcycle 1 number_1 1
	setcycle 1 number_2 2
	setcycle 1 site_1 300
	setcycle 1 size_1 40
	setcycle 1 item diagnostic
	setcycle 2 correct_response right
	setcycle 2 number_1 1
	setcycle 2 number_2 2
	setcycle 2 site_1 -300
	setcycle 2 size_1 60
	setcycle 2 item diagnostic
	setcycle 3 correct_response left
	setcycle 3 number_1 1
	setcycle 3 number_2 2
	setcycle 3 site_1 300
	setcycle 3 size_1 60
	setcycle 3 item diagnostic
	setcycle 4 correct_response right
	setcycle 4 number_1 3
	setcycle 4 number_2 4
	setcycle 4 site_1 -300
	setcycle 4 size_1 40
	setcycle 4 item inducer
	setcycle 5 correct_response left
	setcycle 5 number_1 3
	setcycle 5 number_2 4
	setcycle 5 site_1 300
	setcycle 5 size_1 40
	setcycle 5 item inducer
	setcycle 6 correct_response right
	setcycle 6 number_1 3
	setcycle 6 number_2 4
	setcycle 6 site_1 -300
	setcycle 6 size_1 40
	setcycle 6 item inducer
	setcycle 7 correct_response left
	setcycle 7 number_1 3
	setcycle 7 number_2 4
	setcycle 7 site_1 300
	setcycle 7 size_1 60
	setcycle 7 item inducer
	setcycle 8 correct_response right
	setcycle 8 number_1 6
	setcycle 8 number_2 7
	setcycle 8 site_1 -300
	setcycle 8 size_1 40
	setcycle 8 item diagnostic
	setcycle 9 correct_response left
	setcycle 9 number_1 6
	setcycle 9 number_2 7
	setcycle 9 site_1 300
	setcycle 9 size_1 40
	setcycle 9 item diagnostic
	setcycle 10 correct_response right
	setcycle 10 number_1 6
	setcycle 10 number_2 7
	setcycle 10 site_1 -300
	setcycle 10 size_1 60
	setcycle 10 item diagnostic
	setcycle 11 correct_response left
	setcycle 11 number_1 6
	setcycle 11 number_2 7
	setcycle 11 site_1 300
	setcycle 11 size_1 60
	setcycle 11 item diagnostic
	setcycle 12 correct_response right
	setcycle 12 number_1 8
	setcycle 12 number_2 9
	setcycle 12 site_1 -300
	setcycle 12 size_1 40
	setcycle 12 item inducer
	setcycle 13 correct_response left
	setcycle 13 number_1 8
	setcycle 13 number_2 9
	setcycle 13 site_1 300
	setcycle 13 size_1 40
	setcycle 13 item inducer
	setcycle 14 correct_response right
	setcycle 14 number_1 8
	setcycle 14 number_2 9
	setcycle 14 site_1 -300
	setcycle 14 size_1 60
	setcycle 14 item inducer
	setcycle 15 correct_response left
	setcycle 15 number_1 8
	setcycle 15 number_2 9
	setcycle 15 site_1 300
	setcycle 15 size_1 60
	setcycle 15 item inducer
	setcycle 16 correct_response right
	setcycle 16 number_1 1
	setcycle 16 number_2 3
	setcycle 16 site_1 -300
	setcycle 16 size_1 40
	setcycle 16 item inducer
	setcycle 17 correct_response left
	setcycle 17 number_1 1
	setcycle 17 number_2 3
	setcycle 17 site_1 300
	setcycle 17 size_1 40
	setcycle 17 item inducer
	setcycle 18 correct_response right
	setcycle 18 number_1 1
	setcycle 18 number_2 3
	setcycle 18 site_1 -300
	setcycle 18 size_1 60
	setcycle 18 item inducer
	setcycle 19 correct_response left
	setcycle 19 number_1 1
	setcycle 19 number_2 3
	setcycle 19 site_1 300
	setcycle 19 size_1 60
	setcycle 19 item inducer
	setcycle 20 correct_response right
	setcycle 20 number_1 2
	setcycle 20 number_2 4
	setcycle 20 site_1 -300
	setcycle 20 size_1 40
	setcycle 20 item diagnostic
	setcycle 21 correct_response left
	setcycle 21 number_1 2
	setcycle 21 number_2 4
	setcycle 21 site_1 300
	setcycle 21 size_1 40
	setcycle 21 item diagnostic
	setcycle 22 correct_response right
	setcycle 22 number_1 2
	setcycle 22 number_2 4
	setcycle 22 site_1 -300
	setcycle 22 size_1 60
	setcycle 22 item diagnostic
	setcycle 23 correct_response left
	setcycle 23 number_1 2
	setcycle 23 number_2 4
	setcycle 23 site_1 300
	setcycle 23 size_1 60
	setcycle 23 item diagnostic
	setcycle 24 correct_response right
	setcycle 24 number_1 6
	setcycle 24 number_2 8
	setcycle 24 site_1 -300
	setcycle 24 size_1 40
	setcycle 24 item inducer
	setcycle 25 correct_response left
	setcycle 25 number_1 6
	setcycle 25 number_2 8
	setcycle 25 site_1 300
	setcycle 25 size_1 40
	setcycle 25 item inducer
	setcycle 26 correct_response right
	setcycle 26 number_1 6
	setcycle 26 number_2 8
	setcycle 26 site_1 -300
	setcycle 26 size_1 60
	setcycle 26 item inducer
	setcycle 27 correct_response left
	setcycle 27 number_1 6
	setcycle 27 number_2 8
	setcycle 27 site_1 300
	setcycle 27 size_1 60
	setcycle 27 item inducer
	setcycle 28 correct_response right
	setcycle 28 number_1 7
	setcycle 28 number_2 9
	setcycle 28 site_1 -300
	setcycle 28 size_1 40
	setcycle 28 item diagnostic
	setcycle 29 correct_response left
	setcycle 29 number_1 7
	setcycle 29 number_2 9
	setcycle 29 site_1 300
	setcycle 29 size_1 40
	setcycle 29 item diagnostic
	setcycle 30 correct_response right
	setcycle 30 number_1 7
	setcycle 30 number_2 9
	setcycle 30 site_1 -300
	setcycle 30 size_1 60
	setcycle 30 item diagnostic
	setcycle 31 correct_response left
	setcycle 31 number_1 7
	setcycle 31 number_2 9
	setcycle 31 site_1 300
	setcycle 31 size_1 60
	setcycle 31 item diagnostic
	run Pratice

define loop Bloock_Loop_3
	set source_file ""
	set source table
	set repeat 3
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 56
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 correct_response right
	setcycle 0 item diagnostic
	setcycle 0 number_1 1
	setcycle 0 number_2 2
	setcycle 0 site_1 -300
	setcycle 0 size_1 40
	setcycle 1 correct_response left
	setcycle 1 item diagnostic
	setcycle 1 number_1 1
	setcycle 1 number_2 2
	setcycle 1 site_1 300
	setcycle 1 size_1 40
	setcycle 2 correct_response right
	setcycle 2 item diagnostic
	setcycle 2 number_1 1
	setcycle 2 number_2 2
	setcycle 2 site_1 -300
	setcycle 2 size_1 60
	setcycle 3 correct_response left
	setcycle 3 item diagnostic
	setcycle 3 number_1 1
	setcycle 3 number_2 2
	setcycle 3 site_1 300
	setcycle 3 size_1 60
	setcycle 4 correct_response right
	setcycle 4 item inducer
	setcycle 4 number_1 3
	setcycle 4 number_2 4
	setcycle 4 site_1 -300
	setcycle 4 size_1 40
	setcycle 5 correct_response left
	setcycle 5 item inducer
	setcycle 5 number_1 3
	setcycle 5 number_2 4
	setcycle 5 site_1 300
	setcycle 5 size_1 40
	setcycle 6 correct_response right
	setcycle 6 item inducer
	setcycle 6 number_1 3
	setcycle 6 number_2 4
	setcycle 6 site_1 -300
	setcycle 6 size_1 60
	setcycle 7 correct_response left
	setcycle 7 item inducer
	setcycle 7 number_1 3
	setcycle 7 number_2 4
	setcycle 7 site_1 300
	setcycle 7 size_1 60
	setcycle 8 correct_response right
	setcycle 8 item diagnostic
	setcycle 8 number_1 6
	setcycle 8 number_2 7
	setcycle 8 site_1 -300
	setcycle 8 size_1 40
	setcycle 9 correct_response left
	setcycle 9 item diagnostic
	setcycle 9 number_1 6
	setcycle 9 number_2 7
	setcycle 9 site_1 300
	setcycle 9 size_1 40
	setcycle 10 correct_response right
	setcycle 10 item diagnostic
	setcycle 10 number_1 6
	setcycle 10 number_2 7
	setcycle 10 site_1 -300
	setcycle 10 size_1 60
	setcycle 11 correct_response left
	setcycle 11 item diagnostic
	setcycle 11 number_1 6
	setcycle 11 number_2 7
	setcycle 11 site_1 300
	setcycle 11 size_1 60
	setcycle 12 correct_response right
	setcycle 12 item inducer
	setcycle 12 number_1 8
	setcycle 12 number_2 9
	setcycle 12 site_1 -300
	setcycle 12 size_1 40
	setcycle 13 correct_response left
	setcycle 13 item inducer
	setcycle 13 number_1 8
	setcycle 13 number_2 9
	setcycle 13 site_1 300
	setcycle 13 size_1 40
	setcycle 14 correct_response right
	setcycle 14 item inducer
	setcycle 14 number_1 8
	setcycle 14 number_2 9
	setcycle 14 site_1 -300
	setcycle 14 size_1 60
	setcycle 15 correct_response left
	setcycle 15 item inducer
	setcycle 15 number_1 8
	setcycle 15 number_2 9
	setcycle 15 site_1 300
	setcycle 15 size_1 60
	setcycle 16 correct_response right
	setcycle 16 item inducer
	setcycle 16 number_1 1
	setcycle 16 number_2 3
	setcycle 16 site_1 -300
	setcycle 16 size_1 40
	setcycle 17 correct_response left
	setcycle 17 item inducer
	setcycle 17 number_1 1
	setcycle 17 number_2 3
	setcycle 17 site_1 300
	setcycle 17 size_1 40
	setcycle 18 correct_response right
	setcycle 18 item inducer
	setcycle 18 number_1 1
	setcycle 18 number_2 3
	setcycle 18 site_1 -300
	setcycle 18 size_1 60
	setcycle 19 correct_response left
	setcycle 19 item inducer
	setcycle 19 number_1 1
	setcycle 19 number_2 3
	setcycle 19 site_1 300
	setcycle 19 size_1 60
	setcycle 20 correct_response right
	setcycle 20 item diagnostic
	setcycle 20 number_1 2
	setcycle 20 number_2 4
	setcycle 20 site_1 -300
	setcycle 20 size_1 40
	setcycle 21 correct_response left
	setcycle 21 item diagnostic
	setcycle 21 number_1 2
	setcycle 21 number_2 4
	setcycle 21 site_1 300
	setcycle 21 size_1 40
	setcycle 22 correct_response right
	setcycle 22 item diagnostic
	setcycle 22 number_1 2
	setcycle 22 number_2 4
	setcycle 22 site_1 -300
	setcycle 22 size_1 60
	setcycle 23 correct_response left
	setcycle 23 item diagnostic
	setcycle 23 number_1 2
	setcycle 23 number_2 4
	setcycle 23 site_1 300
	setcycle 23 size_1 60
	setcycle 24 correct_response right
	setcycle 24 item inducer
	setcycle 24 number_1 6
	setcycle 24 number_2 8
	setcycle 24 site_1 -300
	setcycle 24 size_1 40
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	setcycle 28 correct_response right
	setcycle 28 item diagnostic
	setcycle 28 number_1 7
	setcycle 28 number_2 9
	setcycle 28 site_1 -300
	setcycle 28 size_1 40
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	run Experiment

define loop Blook_Loop_2
	set source_file ""
	set source table
	set repeat 3
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 56
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 correct_response right
	setcycle 0 item diagnostic
	setcycle 0 number_1 1
	setcycle 0 number_2 2
	setcycle 0 site_1 -300
	setcycle 0 size_1 40
	setcycle 1 correct_response left
	setcycle 1 item diagnostic
	setcycle 1 number_1 1
	setcycle 1 number_2 2
	setcycle 1 site_1 300
	setcycle 1 size_1 40
	setcycle 2 correct_response right
	setcycle 2 item diagnostic
	setcycle 2 number_1 1
	setcycle 2 number_2 2
	setcycle 2 site_1 -300
	setcycle 2 size_1 60
	setcycle 3 correct_response left
	setcycle 3 item diagnostic
	setcycle 3 number_1 1
	setcycle 3 number_2 2
	setcycle 3 site_1 300
	setcycle 3 size_1 60
	setcycle 4 correct_response right
	setcycle 4 item inducer
	setcycle 4 number_1 3
	setcycle 4 number_2 4
	setcycle 4 site_1 -300
	setcycle 4 size_1 40
	setcycle 5 correct_response left
	setcycle 5 item inducer
	setcycle 5 number_1 3
	setcycle 5 number_2 4
	setcycle 5 site_1 300
	setcycle 5 size_1 40
	setcycle 6 correct_response right
	setcycle 6 item inducer
	setcycle 6 number_1 3
	setcycle 6 number_2 4
	setcycle 6 site_1 -300
	setcycle 6 size_1 60
	setcycle 7 correct_response left
	setcycle 7 item inducer
	setcycle 7 number_1 3
	setcycle 7 number_2 4
	setcycle 7 site_1 300
	setcycle 7 size_1 60
	setcycle 8 correct_response right
	setcycle 8 item diagnostic
	setcycle 8 number_1 6
	setcycle 8 number_2 7
	setcycle 8 site_1 -300
	setcycle 8 size_1 40
	setcycle 9 correct_response left
	setcycle 9 item diagnostic
	setcycle 9 number_1 6
	setcycle 9 number_2 7
	setcycle 9 site_1 300
	setcycle 9 size_1 40
	setcycle 10 correct_response right
	setcycle 10 item diagnostic
	setcycle 10 number_1 6
	setcycle 10 number_2 7
	setcycle 10 site_1 -300
	setcycle 10 size_1 60
	setcycle 11 correct_response left
	setcycle 11 item diagnostic
	setcycle 11 number_1 6
	setcycle 11 number_2 7
	setcycle 11 site_1 300
	setcycle 11 size_1 60
	setcycle 12 correct_response right
	setcycle 12 item inducer
	setcycle 12 number_1 8
	setcycle 12 number_2 9
	setcycle 12 site_1 -300
	setcycle 12 size_1 40
	setcycle 13 correct_response left
	setcycle 13 item inducer
	setcycle 13 number_1 8
	setcycle 13 number_2 9
	setcycle 13 site_1 300
	setcycle 13 size_1 40
	setcycle 14 correct_response right
	setcycle 14 item inducer
	setcycle 14 number_1 8
	setcycle 14 number_2 9
	setcycle 14 site_1 -300
	setcycle 14 size_1 60
	setcycle 15 correct_response left
	setcycle 15 item inducer
	setcycle 15 number_1 8
	setcycle 15 number_2 9
	setcycle 15 site_1 300
	setcycle 15 size_1 60
	setcycle 16 correct_response right
	setcycle 16 item inducer
	setcycle 16 number_1 1
	setcycle 16 number_2 3
	setcycle 16 site_1 -300
	setcycle 16 size_1 40
	setcycle 17 correct_response left
	setcycle 17 item inducer
	setcycle 17 number_1 1
	setcycle 17 number_2 3
	setcycle 17 site_1 300
	setcycle 17 size_1 40
	setcycle 18 correct_response right
	setcycle 18 item inducer
	setcycle 18 number_1 1
	setcycle 18 number_2 3
	setcycle 18 site_1 -300
	setcycle 18 size_1 60
	setcycle 19 correct_response left
	setcycle 19 item inducer
	setcycle 19 number_1 1
	setcycle 19 number_2 3
	setcycle 19 site_1 300
	setcycle 19 size_1 60
	setcycle 20 correct_response right
	setcycle 20 item diagnostic
	setcycle 20 number_1 2
	setcycle 20 number_2 4
	setcycle 20 site_1 -300
	setcycle 20 size_1 40
	setcycle 21 correct_response left
	setcycle 21 item diagnostic
	setcycle 21 number_1 2
	setcycle 21 number_2 4
	setcycle 21 site_1 300
	setcycle 21 size_1 40
	setcycle 22 correct_response right
	setcycle 22 item diagnostic
	setcycle 22 number_1 2
	setcycle 22 number_2 4
	setcycle 22 site_1 -300
	setcycle 22 size_1 60
	setcycle 23 correct_response left
	setcycle 23 item diagnostic
	setcycle 23 number_1 2
	setcycle 23 number_2 4
	setcycle 23 site_1 300
	setcycle 23 size_1 60
	setcycle 24 correct_response right
	setcycle 24 item inducer
	setcycle 24 number_1 6
	setcycle 24 number_2 8
	setcycle 24 site_1 -300
	setcycle 24 size_1 40
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	setcycle 28 correct_response right
	setcycle 28 item diagnostic
	setcycle 28 number_1 7
	setcycle 28 number_2 9
	setcycle 28 site_1 -300
	setcycle 28 size_1 40
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	run Experiment

define sketchpad Correct_answer
	set duration 995
	set description "Präsentiert Stimuli"
	draw textline center=1 color="#005500" font_bold=no font_family=mono font_italic=no font_size=60 html=yes show_if=always text=Richtig x=0 y=0 z_index=0

define sketchpad Ende_Aufgabe_1
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Sie haben das Ende des Übungsblocks erreicht. Wenn sie bereit sind mit dem Experiment zu beginnen, informieren Sie bitte den/die Experimentator/in um fortzufahren." x=0 y=0 z_index=0

define sketchpad Ende_Aufgabe_2
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Sie haben das Ende der 2. Aufgabe erreicht. Wenn sie bereit sind mit dem Experiment zu beginnen, informieren Sie bitte den/die Experimentator/in um fortzufahren." x=0 y=0 z_index=0

define sketchpad Ende_Aufgabe_3
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Sie haben das Ende der 3. Aufgabe erreicht. Wenn sie bereit sind mit dem Experiment zu beginnen, informieren Sie bitte den/die Experimentator/in um fortzufahren." x=0 y=0 z_index=0

define sketchpad Ende_Aufgabe_4
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Sie haben das Ende des Experiments erreicht! Bitte informieren sie den/die Experimentator/in. <br /><br />Vielen Dank für ihre Teilnahme!" x=0 y=0 z_index=0

define sequence Experiment
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run Timing_fixationdot always
	run fixation_dot always
	run Zahlenkombination always
	run Keyboard_response always
	run Blank_Screen always
	run Logger always

define keyboard_response Keyboard_response
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Sammelt Tastaturantworten"
	set allowed_responses "left; right"

define logger Logger
	set description "Registriert experimentelle Daten"
	set auto_log no
	log SOA
	log accuracy
	log avg_rt
	log correct_Keyboard_response
	log count_Correct_answer
	log count_Keyboard_response
	log count_incorrect_answer
	log item
	log number_1
	log number_2
	log response_Keyboard_response
	log response_time_Keyboard_response
	log site_1
	log size_1
	log time_Keyboard_response

define sequence NumerischeStroopTask
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run welcome_1 always
	run instruction_response always
	run welcome_2 always
	run instruction_response always
	run welcome_3 always
	run instruction_response always
	run welcome_4 always
	run instruction_response always
	run welcome_5 always
	run continue always
	run Aufgaben1 always
	run Ende_Aufgabe_1 always
	run continue always
	run Aufgabe_2 always
	run Ende_Aufgabe_2 always
	run continue always
	run Aufgabe_3 always
	run Ende_Aufgabe_3 always
	run continue always
	run Aufgabe_4a always
	run Aufgabe_4b always
	run Ende_Aufgabe_4 always

define sketchpad Pause
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Sie haben die erste Hälfte dieser Übungsaufgabe geschafft. Machen sie gerne eine Pause!" x=32 y=-32 z_index=0

define sequence Pratice
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run Timing_fixationdot always
	run fixation_dot always
	run Zahlenkombination always
	run Keyboard_response always
	run incorrect_answer "[correct]=0"
	run Correct_answer "[correct]=1"
	run Blank_Screen always
	run Logger always

define inline_script Timing_fixationdot
	set description "Führt Python Code aus"
	set _run ""
	___prepare__
	import random 
	var.SOA = random.randint(300,600)-5
	print(var.SOA)
	
	
	if var.size_1 == 40: 
	    var.size_2 = 60
	else: 
	    var.size_2 = 40
	print (var.size_2)
	
	
	if var.site_1 == 300:
	    var.site_2= -300
	else: 
	    var.site_2 = 300
	print (var.site_2)
	__end__

define sketchpad Zahlenkombination
	set duration 0
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size="[size_1]" html=yes show_if=always text="[number_1]" x="[site_1]" y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size="[size_2]" html=yes show_if=always text="[number_2]" x="[site_2]" y=0 z_index=0
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define keyboard_response continue
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response c

define sketchpad fixation_dot
	set duration "[SOA]"
	set description "Präsentiert Stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0
	draw fixdot color=black show_if=always style=default x=-512 y=-640 z_index=0

define sketchpad incorrect_answer
	set duration 995
	set description "Präsentiert Stimuli"
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=60 html=yes show_if=always text=Falsch x=0 y=0 z_index=0

define keyboard_response instruction_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define inline_script pause_recording
	set description "Executes Python code"
	___run__
	if eeg:
		trigger = 255
		port = 888
		
		
		try:
			io.DlPortWritePortUchar(port, trigger)
			print "Trigger number {} RECORDING PAUSED".format(trigger)
		except:
			print 'Failed to send trigger!'
		self.sleep(2)
		io.DlPortWritePortUchar(port, 0)
	__end__
	set _prepare ""

define inline_script start_recording
	set description "Executes Python code"
	___run__
	# Again Courtesy of Jelmer Borst
	eeg = 0
	if eeg:
		#First a 0 trigger to reset ports
		
		try:
			io.DlPortWritePortUchar(port, 0)
		except:
			print('Failed to send zero trigger!')
		self.sleep(2)
	
		#start recording
		try: 
			io.DlPortWritePortUchar(port, 254)
			print('Recording started')
		except:
			print('Recording not started')
		self.sleep(2)
		io.DlPortWritePortUchar(port, 0)
		
		#send trial onset trigger
	
		trigger = var.Block + 100 #because this sequence is not booked yet
		try:
			io.DlPortWritePortUchar(port, trigger)
			print("Trigger number {} TRIAL_BLOCK_TRIGGER").format(trigger)
		except:
			print('Failed to send trigger!')
		self.sleep(2)
		io.DlPortWritePortUchar(port, 0)
	__end__
	set _prepare ""

define sketchpad welcome_1
	set duration 0
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Willkommen bei diesem Experiment!<br />Im Folgenden wollen wir noch kurz die bevorstehende Aufgabe erklären.<br />" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="(Um Fortzufahren drücken sie bitte die Leertaste)" x=0 y=352 z_index=0

define sketchpad welcome_2
	set duration 0
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Ihre Aufgabe wird es sein, die numerisch größere Zahl per Tastendruck zu identifizieren.<br /><br /><br />Seien sie bei dieser Aufgabe so genau und schnell wie möglich." x=32 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="(Um Fortzufahren drücken sie bitte die Leertaste)" x=0 y=352 z_index=0
	draw line color=black penwidth=7 show_if=always x1=-416 x2=-224 y1=-64 y2=-64 z_index=0

define sketchpad welcome_3
	set duration 0
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Wenn die größere Ziffer auf der linken Bildschirmseite ist, drücken sie bitte die linke Pfeiltaste. <br /><br /><br />Wenn die größere Ziffer auf der rechten Bildschirmseite ist, drücken sie bitte die rechte Pfeiltaste." x=2 y=-50 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="(Um Fortzufahren drücken sie bitte die Leertaste)" x=0 y=352 z_index=0

define sketchpad welcome_4
	set duration 0
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Beispiele: <br />" x=-320 y=-288 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text=3 x=-384 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=60 html=yes show_if=always text=6 x=-256 y=-224 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Die 6 ist die numerisch größere Zahl und steht auf der rechten Seite.<br />Die richtige Taste ist die  rechte Pfeiltaste." x=-64 y=-256 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color=black fill=1 penwidth=1 show_if=always x1=-191 x2=-95 y1=-229 y2=-229 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text=3 x=-256 y=32 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=60 html=yes show_if=always text=6 x=-416 y=0 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color=black fill=1 penwidth=1 show_if=always x1=-192 x2=-96 y1=32 y2=32 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Linke Pfeiltaste" x=-64 y=0 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=60 html=yes show_if=always text=3 x=-416 y=96 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=60 html=yes show_if=always text="3<br />" x=-288 y=192 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="6<br />" x=-256 y=96 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="6<br />" x=-416 y=192 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color=black fill=1 penwidth=1 show_if=always x1=-192 x2=-96 y1=128 y2=128 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color=black fill=1 penwidth=1 show_if=always x1=-192 x2=-96 y1=224 y2=224 z_index=0
	draw rect color=black fill=0 h=64 penwidth=3 show_if=always w=192 x=-416 y=0 z_index=0
	draw rect color=black fill=0 h=64 penwidth=3 show_if=always w=192 x=-416 y=96 z_index=0
	draw rect color=black fill=0 h=64 penwidth=3 show_if=always w=192 x=-416 y=192 z_index=0
	draw rect color=black fill=0 h=64 penwidth=3 show_if=always w=192 x=-416 y=-256 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Rechte Pfeiltaste" x=155 y=127 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Linke Pfeiltaste<br />" x=129 y=246 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="(Um Fortzufahren drücken sie bitte die Leertaste)<br />" x=0 y=384 z_index=0

define sketchpad welcome_5
	set duration 0
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=38 html=yes show_if=always text="Sie werden zunächst einige Versuche zur Übung durchführen bei denen Sie eine  Rückmeldung bekommen.<br /><br />Im Anschluss erfolgt das Experiment. Für die Dauer des Experiments werden sie keine Rückmeldung für ihre Antwort erhalten." x=0 y=-32 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="(Um zu Beginnen drücken sie bitte die Leertaste)" x=0 y=352 z_index=0

